PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = value_affirmation
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Routines
  Routine trial
    TextComponent value_message_text
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $message
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    TextComponent rating_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 4.0
      text = How helpful is this message to help you quit smoking?
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the 1, 2, 3, 4, 5 buttons
        rating_keys = ['1', '2', '3', '4', '5']
        if value_keyboard.keys in rating_keys:
            value_rating.markerPos = int(value_keyboard.keys)
            # confirm rating by setting to current markerPos
            value_rating.rating = value_rating.markerPos
    SliderComponent value_rating
      forceEndRoutine = False
      granularity = 0
      labels = ['not at all','extremely']
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
      styles = ('triangleMarker',)
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent value_keyboard
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
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  Routine introduction
    TextComponent introduction_text
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Placeholder introduction text
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    KeyboardComponent key_resp
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = nothing
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  Routine end
    TextComponent end_text
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Placeholder end text
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  Routine iti
    ImageComponent intertrial_interval
      durationEstim = 3
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('message', 'value 1 message'), ('iti', 1.8)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 4.5)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 2.3)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 1.0)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 4.3)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 4.3)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 2.7)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 1.6)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 4.0)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 1.4)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 3.6)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 1.0)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 2.3)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 5.5)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 1.8)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 3.2)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 3.9)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 2.4)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 5.0)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 3.0)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 5.2)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 1.0)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 1.6)]),
      OrderedDict([('message', 'value 2 message'), ('iti', 3.9)]),
      OrderedDict([('message', 'value 1 message'), ('iti', 3.0)])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
    Routine trial
    Routine iti
  LoopTerminator trials
  Routine end
